CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:40
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "T4")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "T3")
    Name to assign these images:CellBody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "T2")
    Name to assign these images:Mitotracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "T1")
    Name to assign these images:Cyt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7
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
Smooth:[module_num:6|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
    Select the input image:CellBody
    Name the output image:Cell_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DAPI_smooth
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Cell_smooth
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.0125
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Mitotracker
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):1,9
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,0.9
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:72
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    Thresholding method:Otsu

RelateObjects:[module_num:11|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
    Parent objects:Cells
    Child objects:Mitochondria
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:12|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
    Select the input objects:Mitochondria
    Name the new objects:Mitochondriom
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cells
    Output object type:Disconnected

RelateObjects:[module_num:13|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
    Parent objects:Cells
    Child objects:Mitochondriom
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:14|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
    Select objects to be masked:Cytoplasm
    Name the masked objects:MaskedCytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Mitochondriom
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Cyt
    Select objects to measure:MaskedCytoplasm, Mitochondriom, Nuclei

CalculateMath:[module_num:16|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
    Name the output measurement:Cyt_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Mitochondriom
    Select the numerator measurement:Intensity_MeanIntensity_Cyt
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:MaskedCytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_Cyt
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RelateObjects:[module_num:17|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
    Parent objects:Nuclei
    Child objects:MaskedCytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:18|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
    Parent objects:Nuclei
    Child objects:Mitochondriom
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:Nuclei
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellBody
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:MaskedCytoplasm
    Select outline color:red
    Select objects to display:Mitochondria

RescaleIntensity:[module_num:21|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
    Select the input image:Mitotracker
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.0,1.0
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
DisplayDataOnImage:[module_num:22|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:RescaleIntensity
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):13
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

ConvertObjectsToImage:[module_num:23|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
    Select the input objects:MaskedCytoplasm
    Name the output image:MaskedCytoplasm
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:24|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
    Select the input objects:Mitochondriom
    Name the output image:Mitochondriome
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:Cells
    Name the output image:Cells
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:27|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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm
    Select the color format:Color
    Select the colormap:Default

DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:MaskedCytoplasm
    Text color:white
    Name the output image that has the measurements displayed:CellNumbers
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:29|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DAPI_smooth
    Text color:red
    Name the output image that has the measurements displayed:NucleiNumber
    Font size (points):15
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:30|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
    Display object or image measurements?:Object
    Select the input objects:Mitochondriom
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Mitotracker
    Text color:red
    Name the output image that has the measurements displayed:MitoNumber
    Font size (points):15
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:CellNumbers
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellBody
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellNumbers
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:MaskedCytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellBody
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    Append a suffix to the image file name?:No
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Cytoplasm_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Masked_CytoplasmN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:Mitochondriome
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mitotracker
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    Append a suffix to the image file name?:No
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Cytoplasm_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|MitochondriomeN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mitotracker
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    Append a suffix to the image file name?:No
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Cytoplasm_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Cells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mitotracker
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    Append a suffix to the image file name?:No
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Cytoplasm_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellsN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellBody
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    Append a suffix to the image file name?:No
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Cytoplasm_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CytoplasmN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:NucleiNumber
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiNumber
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:MitoNumber
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mitotracker
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|MitoNumber
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:39|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
    Select object sets to measure:Cells, MaskedCytoplasm, Mitochondriom, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:;
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|DataN
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MaskedCytoplasm|AreaShape_Area,MaskedCytoplasm|Intensity_MeanIntensity_Cyt,Cells|AreaShape_MeanRadius,Cells|AreaShape_BoundingBoxMinimum_X,Cells|AreaShape_BoundingBoxMinimum_Y,Cells|AreaShape_MaxFeretDiameter,Cells|AreaShape_MedianRadius,Cells|AreaShape_MinFeretDiameter,Cells|AreaShape_MinorAxisLength,Cells|AreaShape_BoundingBoxMaximum_Y,Cells|AreaShape_BoundingBoxMaximum_X,Cells|AreaShape_Eccentricity,Cells|AreaShape_MajorAxisLength,Cells|AreaShape_Compactness,Cells|AreaShape_FormFactor,Cells|AreaShape_Orientation,Cells|AreaShape_Center_Y,Cells|AreaShape_Center_X,Cells|AreaShape_EulerNumber,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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